PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sentenceTR1200
  keyboardBackend = ioHub
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Routines
  Routine Bacalao
    TextComponent text
      letterHeight = 0.1
      pos = (0, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = El bacalao
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = está marinado
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    TextComponent text_3
      letterHeight = 0.1
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = en limón
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  Routine balde
    TextComponent text_4
      letterHeight = 0.1
      pos = (0, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = El balde
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = está lleno
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    TextComponent text_6
      letterHeight = 0.1
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = de hielo
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  Routine bizcocho
  Routine fajitas
    TextComponent text_7
      letterHeight = 0.1
      pos = (0, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = Las fajitas
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    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = de res
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    TextComponent text_9
      letterHeight = 0.1
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = están listas
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  Routine mantequilla
    TextComponent text_10
      letterHeight = 0.1
      pos = (0, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = La mantequilla
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    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = da sabor
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    TextComponent text_12
      letterHeight = 0.1
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = al plato
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  Routine ISI
    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.8
      text = +
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  Routine Instrucciones
    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Veras oraciones. Por favor, leelas en voz alta cuando aparezca la cruz
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Flow
  Routine Instrucciones
  Routine ISI
  Routine Bacalao
  Routine ISI
  Routine balde
  Routine ISI
  Routine fajitas
  Routine ISI
  Routine mantequilla
  Routine ISI
