PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sentence_seqPilot
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine ISI
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
      text = +
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  Routine Este
    TextComponent este
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text = Este
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  Routine El
    TextComponent el
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = El
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  Routine Ese
    TextComponent ese
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = Ese
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  Routine Esa
    TextComponent esa
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = Esa
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  Routine Esta
    TextComponent esta
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = Esta
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  Routine Las
    TextComponent las
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = Las
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  Routine Los
    TextComponent los
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = Los
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  Routine La
    TextComponent la
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = La
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  Routine Esos
    TextComponent esos
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = Esos
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  Routine Esas
    TextComponent esas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = Esas
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  Routine xx
    TextComponent xx_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = xx
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  Routine bacalao
    TextComponent bacalao_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bacalao
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  Routine balde
    TextComponent balde_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = balde
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  Routine bizcocho
    TextComponent bizcocho_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bizcocho
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  Routine bocadillo
    TextComponent bocadillo_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bocadillo
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  Routine boina
    TextComponent boina_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = boina
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  Routine bolígrafo
    TextComponent boligrafo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bolígrafo
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  Routine bombilla
    TextComponent bombilla_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bombilla
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  Routine bombón
    TextComponent bombón_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bombón
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  Routine fabada
    TextComponent fabada_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fabada
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  Routine fajitas
    TextComponent fajitas_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fajitas
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  Routine farol
    TextComponent farol_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = farol
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  Routine ficha
    TextComponent ficha_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ficha
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  Routine fideos
    TextComponent fideos_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fideos
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  Routine filete
    TextComponent filete_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = filete
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  Routine filtro
    TextComponent filtro_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = filtro
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  Routine fondúe
    TextComponent fondue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fondúe
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  Routine funda
    TextComponent funda_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = funda
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  Routine fúsil
    TextComponent fusil
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fúsil
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  Routine mango
    TextComponent mango_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mango
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  Routine manguera
    TextComponent manguera_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = manguera
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  Routine mantequilla
    TextComponent mantequilla_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mantequilla
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  Routine manzana
    TextComponent manzana_
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = manzana
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  Routine martillo
    TextComponent martillo_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = martillo
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  Routine máscara
    TextComponent mascara
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = máscara
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  Routine mazapán
    TextComponent mazapan
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mazapán
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  Routine melón
    TextComponent melon
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = melón
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  Routine monitor
    TextComponent monitor_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = monitor
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  Routine muñeco
    TextComponent muñeco_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = muñeco
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  Routine nachos
    TextComponent nachos_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = nachos
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  Routine naipes
    TextComponent naipes_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = naipes
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  Routine naranja
    TextComponent naranja_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = naranja
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  Routine nata
    TextComponent nata_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = nata
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  Routine navaja
    TextComponent navaja_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = navaja
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  Routine neceser
    TextComponent neceser_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = neceser
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  Routine nectarina
    TextComponent nectarina_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = nectarina
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  Routine nevera
    TextComponent nevera_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = nevera
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  Routine nudo
    TextComponent nudo_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = nudo
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  Routine nuez
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = nuez
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  Routine paella
    TextComponent paella_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = paella
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  Routine pala
    TextComponent pala_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pala
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  Routine paletilla
    TextComponent paletilla_
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
      text = paletilla
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  Routine palillo
    TextComponent palillo_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = palillo
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  Routine pañuelo
    TextComponent pañuelo_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pañuelo
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  Routine paraguas
    TextComponent paraguas_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = paraguas
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  Routine pasas
    TextComponent pasas_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pasas
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  Routine pavo
    TextComponent pavo_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pavo
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  Routine pincel
    TextComponent pincel_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pincel
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  Routine pollo
    TextComponent pollo_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pollo
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  Routine sable
    TextComponent sable_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sable
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  Routine salchicha
    TextComponent salchicha_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = salchicha
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  Routine salmón
    TextComponent salmón_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = salmón
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  Routine sandía
    TextComponent sandia
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sandía
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  Routine sartén
    TextComponent sarten
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sartén
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  Routine sello
    TextComponent sello_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sello
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  Routine setas
    TextComponent setas_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = setas
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  Routine sobre
    TextComponent sobre_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sobre
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  Routine soga
    TextComponent soga_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = soga
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  Routine vinagre
    TextComponent vinagre_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = vinagre
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  Routine violín
    TextComponent violin
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = violín
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  Routine xxxx
    TextComponent XXXX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = xxxx
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  Routine xxxxx
    TextComponent XXXXX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = xxxxx
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  Routine xxxxxx
    TextComponent XXXXXX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = xxxxxx
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  Routine xxxxxxx
    TextComponent XXXXXXX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = xxxxxxx
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  Routine xxxxxxxx
    TextComponent XXXXXXXX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = xxxxxxxx
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  Routine xxxxxxxxxxx
    TextComponent XXXXXXXXXXX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = xxxxxxxxxx
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  Routine con
    TextComponent CON
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = con
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  Routine está
    TextComponent Está
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = está
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  Routine lleva
    TextComponent Lleva
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = lleva
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  Routine se
    TextComponent Se
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = se
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  Routine negra
    TextComponent Negra
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = negra
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  Routine de
    TextComponent De
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = de
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  Routine son
    TextComponent Son
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = son
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  Routine del_2
    TextComponent Del
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = del
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  Routine es
    TextComponent Es
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = es
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  Routine necesita
    TextComponent Necesita
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = necesita
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  Routine caramelizada
    TextComponent Caramelizada
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = caramelizada
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  Routine impedía
    TextComponent Impedia
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = impedía
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  Routine casero
    TextComponent Casero
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = casero
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  Routine todavía
    TextComponent Todavia
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = todavía
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  Routine muestra
    TextComponent Muestra
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = muestra
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  Routine tienen
    TextComponent Tienen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = tienen
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  Routine tiene
    TextComponent Tiene
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = tiene
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  Routine líquida
    TextComponent Líquida
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = líquida
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  Routine asegura
    TextComponent Asegura
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = asegura
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  Routine moscada
    TextComponent Moscada
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = moscada
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  Routine chino
    TextComponent Chino
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = chino
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  Routine lo
    TextComponent Lo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = lo
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  Routine añaden
    TextComponent Añaden
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = añaden
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  Routine tenía
    TextComponent Tenia
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = tenía
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  Routine ancho
    TextComponent Ancho
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ancho
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  Routine en
    TextComponent En
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = en
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  Routine italiana
    TextComponent Italiana
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = italiana
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  Routine ahumado
    TextComponent Ahumado
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ahumado
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  Routine portobello
    TextComponent Portobello
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = portobello
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  Routine va
    TextComponent Va
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = va
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  Routine balsámico
    TextComponent Balsámico
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = balsámico
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  Routine xxxxxxxxx
    TextComponent XXXXXXXXX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = xxxxxxxxx
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  Routine patatas
    TextComponent Patatas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = patatas
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  Routine lleno
    TextComponent Lleno
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = lleno
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  Routine frutas
    TextComponent Frutas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = frutas
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  Routine cayó
    TextComponent Cayó
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = cayó
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  Routine le
    TextComponent Le
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = le
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  Routine quedó
    TextComponent Quedó
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = quedó
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  Routine parpadeando
    TextComponent Parpadeando
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = parpadeando
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  Routine relleno
    TextComponent Relleno
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = relleno
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  Routine camarones
    TextComponent Camarones
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = camarones
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  Routine maíz
    TextComponent Maíz
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = maíz
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  Routine gas
    TextComponent Gas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = gas
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  Routine ajedrez
    TextComponent Ajedrez
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ajedrez
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  Routine mi
    TextComponent Mi
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mi
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  Routine marinado
    TextComponent Marinado
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = marinado
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  Routine aceite
    TextComponent Aceite
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = aceite
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  Routine móvil
    TextComponent Móvil
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = móvil
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  Routine asalto
    TextComponent Asalto
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = asalto
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  Routine una
    TextComponent Una
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = una
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  Routine un
    TextComponent Un
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = un
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  Routine utiliza
    TextComponent Utiliza
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = utiliza
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  Routine parece
    TextComponent Parece
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = parece
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  Routine ver
    TextComponent Ver
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ver
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  Routine te
    TextComponent Te
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = te
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  Routine imágenes
    TextComponent Imágenes
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = imágenes
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  Routine porcelana
    TextComponent Queso
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = porcelana
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  Routine queso
    TextComponent Queso_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = queso
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  Routine me
    TextComponent Me
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = me
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  Routine afeitar
    TextComponent Afeitar
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = afeitar
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  Routine para
    TextComponent Para
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = para
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  Routine difícil
    TextComponent Difícil
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = difícil
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  Routine vacía
    TextComponent Vacía
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = vacía
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  Routine fuertemente
    TextComponent Fuertemente
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fuertemente
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  Routine sirve
    TextComponent Sirve
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sirve
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  Routine partió
    TextComponent Partió
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = partió
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  Routine cordero
    TextComponent Cordero
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = cordero
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  Routine olvidé
    TextComponent Olvidé
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = olvidé
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  Routine cubre
    TextComponent Cubre
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = cubre
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  Routine salsa
    TextComponent Salsa
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = salsa
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  Routine general
    TextComponent General
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = general
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  Routine pepitas
    TextComponent Pepitas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pepitas
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  Routine frasco
    TextComponent Frasco
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = frasco
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  Routine dirigido
    TextComponent Dirigido
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = dirigido
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  Routine hecha
    TextComponent Hecha
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = hecha
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  Routine cebollas
    TextComponent Cebollas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = cebollas
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  Routine concierto
    TextComponent Concierto
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = concierto
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  Routine y_3
    TextComponent Y
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = y
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  Routine al
    TextComponent Al
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = al
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  Routine sin_2
    TextComponent Sin
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sin
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  Routine están
    TextComponent Están
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = están
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  Routine comida
    TextComponent Comida
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = comida
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  Routine nos
    TextComponent Nos
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = nos
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  Routine fruta
    TextComponent Fruta
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fruta
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  Routine conector
    TextComponent Conector
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = conector
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  Routine muy
    TextComponent Muy
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = muy
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  Routine la_2
    TextComponent la_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = la
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  Routine sus
    TextComponent Sus
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sus
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  Routine diseño
    TextComponent Diseño
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = diseño
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  Routine perfume
    TextComponent Perfume
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = perfume
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  Routine gusta
    TextComponent Gusta
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = gusta
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  Routine mis
    TextComponent Mis
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mis
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  Routine trocea
    TextComponent Trocea
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = trocea
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  Routine estampado
    TextComponent Estampado
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = estampado
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  Routine sabor
    TextComponent Sabor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sabor
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  Routine piel
    TextComponent Piel
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = piel
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  Routine más
    TextComponent Más
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = más
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  Routine estaba
    TextComponent Estaba
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = estaba
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  Routine mucho
    TextComponent Mucho
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mucho
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  Routine a
    TextComponent A
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = a
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  Routine esta_2
    TextComponent Esta_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = esta
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  Routine era
    TextComponent Era
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = era
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  Routine xxx
    TextComponent XXX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = xxx
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  Routine delicioso
    TextComponent Delicioso
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = delicioso
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  Routine hielo
    TextComponent Hielo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = hielo
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  Routine nueces
    TextComponent Nueces
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = nueces
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  Routine suelo
    TextComponent Suelo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = suelo
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  Routine bien
    TextComponent Bien
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bien
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  Routine tinta
    TextComponent Tinta
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = tinta
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  Routine nuevo
    TextComponent Nuevo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = nuevo
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  Routine licor
    TextComponent Licor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = licor
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  Routine exquisita
    TextComponent Exquisita
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = exquisita
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  Routine listas
    TextComponent Listas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = listas
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  Routine apagó
    TextComponent Apagó
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = apagó
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  Routine movió
    TextComponent Movió
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = movió
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  Routine favorita
    TextComponent Favorita
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = favorita
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  Routine vino
    TextComponent Vino
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = vino
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  Routine sucio
    TextComponent Sucio
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sucio
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  Routine extravió
    TextComponent Extravió
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = extravió
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  Routine aterroriza
    TextComponent Aterroriza
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = aterroriza
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  Routine cara
    TextComponent Cara
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = cara
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  Routine cocinar
    TextComponent Cocinar
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = cocinar
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  Routine sabrosa
    TextComponent Sabrosa
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sabrosa
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  Routine mesa
    TextComponent Mesa
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mesa
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  Routine ojos
    TextComponent Ojos
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ojos
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  Routine inmaduro
    TextComponent Inmaduro
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = inmaduro
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  Routine borrosas
    TextComponent Borrosas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = borrosas
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  Routine frágil
    TextComponent Fragil
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = frágil
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  Routine irresistibles
    TextComponent Irresistibles
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = irresistibles
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  Routine particular
    TextComponent Particular
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = particular
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  Routine agradable
    TextComponent Agradable
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = agradable
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  Routine desgastada
    TextComponent Desgastada
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = desgastada
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  Routine cosméticos
    TextComponent Cosméticos
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = cosméticos
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  Routine pelar
    TextComponent Pelar
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pelar
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  Routine barco
    TextComponent Barco
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = barco
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  Routine fácilmente
    TextComponent Facilmente
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fácilmente
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  Routine cazuelas
    TextComponent Cazuelas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = cazuelas
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  Routine dos
    TextComponent Dos
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = dos
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  Routine popular
    TextComponent Popular
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = popular
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  Routine delgado
    TextComponent Delgado
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = delgado
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  Routine elegante
    TextComponent Elegante
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = elegante
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  Routine casa
    TextComponent Casa
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = casa
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  Routine dulce
    TextComponent Dulce
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = dulce
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  Routine crujiente
    TextComponent Crujiente
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = crujiente
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  Routine área
    TextComponent Area
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = área
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  Routine exquisito
    TextComponent Exquisito
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = exquisito
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  Routine oxidado
    TextComponent Oxidado
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = oxidado
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  Routine favorito
    TextComponent Favorito
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = favorito
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  Routine tiernas
    TextComponent Tiernas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = tiernas
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  Routine roto
    TextComponent Roto
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = roto
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  Routine carnosas
    TextComponent Carnosas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = carnosas
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  Routine ti
    TextComponent Ti
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ti
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  Routine cáñamo
    TextComponent Cáñamo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = cañamo
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  Routine sabroso
    TextComponent Sabroso
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sabroso
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  Routine extraordinario
    TextComponent Extraordinario
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = extraordinario
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  Routine xxxxxxxxxx
    TextComponent XXXXXXXXXX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = xxxxxxxxxx
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Flow
  Routine trial
