PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = syllable_seqA1
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine ma
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ma
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  Routine me
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = me
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  Routine mi
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mi
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  Routine mo
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mo
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  Routine mu
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mu
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  Routine na
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = na
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  Routine ne
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ne
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  Routine ni
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ni
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  Routine no
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = no
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  Routine nu
    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = nu
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  Routine pa
    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pa
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  Routine pe
    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pe
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  Routine pi_2
    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pi
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  Routine po
    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = po
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  Routine pu
    TextComponent text_15
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pu
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  Routine ba
    TextComponent text_16
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ba
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  Routine be
    TextComponent text_17
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = be
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  Routine bi
    TextComponent text_18
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bi
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  Routine bo
    TextComponent text_19
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bo
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  Routine bu
    TextComponent text_20
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bu
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  Routine fa
    TextComponent text_21
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fa
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  Routine fe
    TextComponent text_22
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fe
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  Routine fi
    TextComponent text_23
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fi
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  Routine fo
    TextComponent text_24
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fo
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  Routine fu
    TextComponent text_25
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fu
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  Routine sa
    TextComponent text_26
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sa
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  Routine se
    TextComponent text_27
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = se
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  Routine si
    TextComponent text_28
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = si
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  Routine so
    TextComponent text_29
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = so
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  Routine su
    TextComponent text_30
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = su
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  Routine xx
    TextComponent text_31
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = xx
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  Routine ISI
    TextComponent text_32
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.7
      text = +
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    MicrophoneComponent mic
      channels = auto
      device = default
      maxSize = 24000
      outputType = wav
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.7
      syncScreenRefresh = True
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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  Routine ISI2
    TextComponent text_33
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.8
      text = +
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        mic_q1 = sound.microphone.Microphone(
            device=8, channels=1,
            sampleRateHz=44100, maxRecordingSize=24000.0)
      Each Frame:
        if mic_q1.status == NOT_STARTED and t >= 0.4-frameTolerance:
            # keep track of start time/frame for later
            mic_q1.frameNStart = frameN  # exact frame index
            mic_q1.tStart = t  # local t and not account for scr refresh
            mic_q1.tStartRefresh = tThisFlipGlobal  # on global time
            win.timeOnFlip(mic_q1, 'tStartRefresh')  # time at next scr refresh
            # add timestamp to datafile
            thisExp.addData('mic_q1.started', t)
            # start recording with mic
            mic_q1.start()
            mic_q1.status = STARTED
        if mic_q1.status == STARTED:
            # update recorded clip for mic
            mic_q1.poll()
        if mic_q1.status == STARTED:
            # is it time to stop? (based on global clock, using actual start)
            if tThisFlipGlobal > mic_q1.tStartRefresh + 4.55-frameTolerance:
                # keep track of stop time/frame for later
                mic_q1.tStop = t  # not accounting for scr refresh
                mic_q1.frameNStop = frameN  # exact frame index
                # add timestamp to datafile
                thisExp.addData('mic_q1.stopped', t)
                # stop recording with mic
                mic_q1.stop()
                mic_q1.status = FINISHED
      End Experiment:
        for tag_q1 in mic_q1.clips:
            for i, clip in enumerate(mic_q1.clips[tag_q1]):
                clipFilename = 'recording_mic_%s.wav' % tag_q1
                print(i)
                print(clip)
                # if there's more than 1 clip with this tag, append a counter for all beyond the first
                if i > 0:
                    clipFilename += '_%s' % i
                clip.save(os.path.join(micRecFolder, clipFilename))```
      End Routine:
        mic_q1.stop()
        tag_q1 = data.utils.getDateStr()
        micClip = mic_q1.bank(tag=tag,
            transcribe='None',
            config=None
        )
        q1_trials.addData('mic_q1.clip', os.path.join(micRecFolder, 'recording_mic_%s.wav' % tag_q1))
Flow
  Routine trial
  Routine sa
  Routine ISI
  Routine ma
  Routine ISI2
  Routine fe
  Routine ISI2
  Routine ma
  Routine ISI2
  Routine bi
  Routine ISI2
  Routine me
  Routine ISI2
  Routine ni
  Routine ISI2
  Routine fa
  Routine ISI2
  Routine se
  Routine ISI2
  Routine su
  Routine ISI2
  Routine ne
  Routine ISI2
  Routine be
  Routine ISI2
  Routine xx
  Routine ISI2
