PsychoPy2experiment version="2023.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = syllable_seqC
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text_33
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
    TextComponent text_65
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine ma
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ma
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    TextComponent text_45
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine me
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = me
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    TextComponent text_46
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine mi
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mi
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    TextComponent text_47
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine mo
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mo
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    TextComponent text_48
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine mu
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = mu
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    TextComponent text_49
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine na
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = na
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    TextComponent text_50
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine ne
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ne
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    TextComponent text_51
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine ni
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ni
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    TextComponent text_52
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine no
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = no
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    TextComponent text_53
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine nu
    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = nu
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    TextComponent text_54
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine pa
    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pa
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    TextComponent text_55
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine pe
    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pe
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    TextComponent text_56
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine pi_2
    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pi
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    TextComponent text_57
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine po
    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = po
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    TextComponent text_58
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine pu
    TextComponent text_15
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = pu
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    TextComponent text_59
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine ba
    TextComponent text_16
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = ba
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    TextComponent text_35
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine be
    TextComponent text_17
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = be
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    TextComponent text_36
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine bi
    TextComponent text_18
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bi
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    TextComponent text_37
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine bo
    TextComponent text_19
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = bo
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    TextComponent text_38
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine bu
    TextComponent text_20
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = bu
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    TextComponent text_39
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine fa
    TextComponent text_21
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fa
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    TextComponent text_40
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine fe
    TextComponent text_22
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fe
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    TextComponent text_41
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine fi
    TextComponent text_23
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fi
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    TextComponent text_42
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine fo
    TextComponent text_24
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fo
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    TextComponent text_43
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine fu
    TextComponent text_25
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = fu
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    TextComponent text_44
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine sa
    TextComponent text_26
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = sa
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    TextComponent text_60
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine se
    TextComponent text_27
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = se
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    TextComponent text_61
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine si
    TextComponent text_28
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = si
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    TextComponent text_62
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine so
    TextComponent text_29
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = so
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    TextComponent text_63
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine su
    TextComponent text_30
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = su
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    TextComponent text_64
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
  Routine xx
    TextComponent text_31
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = xx
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  Routine ISI
    TextComponent text_32
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.7
      text = +
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    TextComponent text_34
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Any text

        including line breaks
Flow
  Routine trial
  Routine ISI
  Routine su
  Routine ISI
  Routine mu
  Routine ISI
  Routine fa
  Routine ISI
  Routine me
  Routine ISI
  Routine ba
  Routine ISI
  Routine mo
  Routine ISI
  Routine nu
  Routine ISI
  Routine fu
  Routine ISI
  Routine sa
  Routine ISI
  Routine so
  Routine ISI
  Routine no
  Routine ISI
  Routine be
  Routine ISI
  Routine xx
  Routine ISI
  Routine fo
  Routine ISI
  Routine xx
  Routine ISI
  Routine mi
  Routine ISI
  Routine ne
  Routine ISI
  Routine po
  Routine ISI
  Routine mo
  Routine ISI
  Routine pa
  Routine ISI
  Routine sa
  Routine ISI
  Routine xx
  Routine ISI
  Routine bu
  Routine ISI
  Routine be
  Routine ISI
  Routine ma
  Routine ISI
  Routine su
  Routine ISI
  Routine bu
  Routine ISI
  Routine si
  Routine ISI
  Routine fu
  Routine ISI
  Routine fe
  Routine ISI
  Routine pi_2
  Routine ISI
  Routine pa
  Routine ISI
  Routine bo
  Routine ISI
  Routine fo
  Routine ISI
  Routine pu
  Routine ISI
  Routine fa
  Routine ISI
  Routine na
  Routine ISI
  Routine xx
  Routine ISI
  Routine se
  Routine ISI
  Routine se
  Routine ISI
  Routine pi_2
  Routine ISI
  Routine ne
  Routine ISI
  Routine so
  Routine ISI
  Routine no
  Routine ISI
  Routine mu
  Routine ISI
  Routine xx
  Routine ISI
  Routine fi
  Routine ISI
  Routine fi
  Routine ISI
  Routine xx
  Routine ISI
  Routine ma
  Routine ISI
  Routine bi
  Routine ISI
  Routine xx
  Routine ISI
  Routine pe
  Routine ISI
  Routine ba
  Routine ISI
  Routine po
  Routine ISI
  Routine na
  Routine ISI
  Routine ni
  Routine ISI
  Routine fe
  Routine ISI
  Routine bo
  Routine ISI
  Routine nu
  Routine ISI
  Routine bi
  Routine ISI
  Routine pe
  Routine ISI
  Routine xx
  Routine ISI
  Routine me
  Routine ISI
  Routine mi
  Routine ISI
  Routine ni
  Routine ISI
  Routine xx
  Routine ISI
  Routine si
  Routine ISI
  Routine pu
  Routine ISI
  Routine xx
