PsychoPy2experiment version="2023.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = word_seqD
  keyboardBackend = ioHub
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Routines
  Routine start
    TextComponent Start
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        Esto es un piloto.
        Por favor, lee la palabra que veas en voz alta.
  Routine ISI
    CodeComponent code
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        stim_dur = 0
      Begin Routine:
        stim_dur = random()*(2.7)+2
      End Routine:
        thisExp.addData("FixDur", stim_dur)
    TextComponent Isi
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every repeat] = +
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  Routine manzana
    TextComponent Manzana
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = manzana
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  Routine salmón
    TextComponent Salmon
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = salmón
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  Routine fideos
    MicrophoneComponent mic_3
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent Fideos
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = fideos
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  Routine martillo
    TextComponent Martillo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = martillo
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  Routine vinagre
    TextComponent Vinagre
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = vinagre
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  Routine xxxx
    TextComponent XXXX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = xxxx
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  Routine xxxxx
    TextComponent XXXXX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = xxxxx
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  Routine naranja
    TextComponent Naranja
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = naranja
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  Routine ficha
    MicrophoneComponent mic_7
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent Ficha
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = ficha
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  Routine bacalao
    MicrophoneComponent mic_8
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent Bacalao
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = bacalao
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  Routine nectarina
    TextComponent Nectarina
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = nectarina
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  Routine violín
    TextComponent Violin
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = violín
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  Routine pasas
    TextComponent Pasas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = pasas
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  Routine xxxxxx
    TextComponent xxxxxX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = xxxxxx
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  Routine monitor
    TextComponent Monitor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = monitor
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  Routine xxxxxxxx
    TextComponent xxxxxxxX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = xxxxxxxx
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  Routine nevera
    TextComponent Nevera
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = nevera
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  Routine palillo
    TextComponent Palillio
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = palillo
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  Routine muñeco
    TextComponent Muneco
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = muñecoMuneco
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  Routine pincel
    TextComponent Pincel
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = pincel
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  Routine sartén
    TextComponent Sarten
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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      text:
        sartén
  Routine mazapán
    TextComponent Mazapan
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = mazapán
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  Routine bombón
    TextComponent Bombon
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = bombón
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  Routine boina
    TextComponent Boina
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = boina
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  Routine mantequilla
    TextComponent Mantequilla
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = mantequila
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  Routine sopa
    TextComponent Sopa
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = sopa
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  Routine bocadillo
    TextComponent Bacadillo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = bocadillo
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  Routine sobre
    TextComponent Sobre
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = sobre
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  Routine filtro
    TextComponent Filtro
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = filtro
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  Routine xxxxxxxxxxx
    TextComponent xxxxxxxxxxX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text = xxxxxxxxxxx
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  Routine pañuelo
    TextComponent Panuelo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = pañuelo
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  Routine paletilla
    TextComponent Paletilla
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = paletilla
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  Routine bombilla
    TextComponent Bombilla
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = bombilla
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  Routine fabada
    TextComponent Fabada
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = fabada
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  Routine pala
    TextComponent Pala
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = pala
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  Routine farol
    TextComponent Farol
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = farol
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  Routine neceser
    TextComponent Neceser
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = neceser
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  Routine xxxxx_2
    TextComponent xxxxX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = xxxxx
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  Routine salchicha
    TextComponent Salchicha
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = salchicha
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  Routine sello
    TextComponent Sello
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = sello
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  Routine pavo
    TextComponent Pavo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = pavo
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  Routine navaja
    TextComponent Navaja
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = navaja
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  Routine sable
    TextComponent Sable
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = sable
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  Routine mango
    TextComponent Mango
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = mango
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  Routine xxxx_2
    TextComponent XXXX2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = xxxx
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  Routine filete
    TextComponent Filete
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = filete
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  Routine fondúe
    TextComponent Fondue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = fondúe
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  Routine xxxxxxxx_2
    TextComponent text_50
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text = xxxxxxxx
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  Routine setas
    TextComponent Seta
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = setas
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  Routine manguera
    TextComponent Manguera
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = manguera
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  Routine fajitas
    TextComponent Fajita
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = fajitas
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  Routine máscara
    TextComponent Mascara
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = máscara
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  Routine bolígrafo
    TextComponent Boligrafo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = bolígrafo
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  Routine paella
    TextComponent Paella
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = paella
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  Routine melóm
    TextComponent Melon
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = melón
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  Routine nachos
    TextComponent Nachos
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = nachos
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  Routine nuez
    TextComponent Nuez
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = nuez
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  Routine nata
    TextComponent Nata
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = nata
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  Routine funda
    TextComponent Funda
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = funda
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  Routine balde
    TextComponent Balde
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = balde
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  Routine paraguas
    TextComponent Paraguas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = paraguas
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  Routine soga
    TextComponent Soga
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = soga
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  Routine pollo
    TextComponent Pollo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = pollo
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  Routine fusil
    TextComponent Fusil
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = fusil
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  Routine sandía
    TextComponent Sandia
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = sandía
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  Routine xxxxxxx
    TextComponent xxxxXXX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = xxxxxxx
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  Routine naipes
    TextComponent Naipes
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = naipes
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  Routine bizcocho
    TextComponent Bizcocho
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = bizcocho
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  Routine xxxxxx_2
    TextComponent xxxxXX
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = xxxxxx
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  Routine nudo
    TextComponent Nudo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = nudo
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Flow
  Routine start
  Routine violín
  Routine ISI
  Routine nuez
  Routine ISI
  Routine muñeco
  Routine ISI
  Routine nudo
  Routine ISI
  Routine xxxxxxxxxxx
  Routine ISI
  Routine nevera
  Routine ISI
  Routine sopa
  Routine ISI
  Routine monitor
  Routine ISI
  Routine vinagre
  Routine ISI
  Routine bombón
  Routine ISI
  Routine sopa
  Routine ISI
  Routine monitor
  Routine ISI
  Routine vinagre
  Routine ISI
  Routine bombón
  Routine ISI
  Routine soga
  Routine ISI
  Routine xxxxxxx
  Routine ISI
  Routine pollo
  Routine ISI
  Routine melóm
  Routine ISI
  Routine pincel
  Routine ISI
  Routine nectarina
  Routine ISI
  Routine sobre
  Routine ISI
  Routine fusil
  Routine ISI
  Routine neceser
  Routine ISI
  Routine funda
  Routine ISI
  Routine bombilla
  Routine ISI
  Routine pavo
  Routine ISI
  Routine xxxxxxxx
  Routine ISI
  Routine xxxxxxx
  Routine ISI
  Routine navaja
  Routine ISI
  Routine bolígrafo
  Routine ISI
  Routine xxxxxx
  Routine ISI
  Routine boina
  Routine ISI
  Routine mazapán
  Routine ISI
  Routine máscara
  Routine ISI
  Routine fondúe
  Routine ISI
  Routine filtro
  Routine ISI
  Routine xxxxxx
  Routine ISI
  Routine martillo
  Routine ISI
  Routine filete
  Routine ISI
  Routine manzana
  Routine ISI
  Routine setas
  Routine ISI
  Routine pasas
  Routine ISI
  Routine bocadillo
  Routine ISI
  Routine bizcocho
  Routine ISI
  Routine fideos
  Routine ISI
  Routine sello
  Routine ISI
  Routine balde
  Routine ISI
  Routine sartén
  Routine ISI
  Routine nata
  Routine ISI
  Routine paraguas
  Routine ISI
  Routine mantequilla
  Routine ISI
  Routine manguera
  Routine ISI
  Routine pañuelo
  Routine ISI
  Routine naranja
  Routine ISI
  Routine xxxxx
  Routine ISI
  Routine palillo
  Routine ISI
  Routine ficha
  Routine ISI
  Routine xxxxx
  Routine ISI
  Routine farol
  Routine ISI
  Routine sandía
  Routine ISI
  Routine salmón
  Routine ISI
  Routine mango
  Routine ISI
  Routine xxxx
  Routine ISI
  Routine salchicha
  Routine ISI
  Routine xxxx
  Routine fajitas
  Routine ISI
  Routine paletilla
  Routine ISI
  Routine naipes
  Routine ISI
  Routine nachos
  Routine ISI
  Routine sable
  Routine ISI
  Routine pala
  Routine ISI
  Routine bacalao
  Routine ISI
  Routine fabada
  Routine ISI
  Routine paella
