PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = word_seqPilot
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine start
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = This is a test 
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  Routine ISI
    CodeComponent code
      Code Type = Both
      disabled = True
      Begin JS Routine:
        modify = false;
        text.text = "";
      Begin Routine:
        modify = False
        text.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text.text = text.text + ' '
            elif 'backspace' in keys:
                text.text = text.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text.text = text.text + keys[0].upper()
                    modify = False
                else:
                    text.text = text.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text.text = text.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text.text = text.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text.text = text.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text.text)
        text.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      text = +
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  Routine manzana
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = manzana
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    MicrophoneComponent mic
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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  Routine salmón
    MicrophoneComponent mic_2
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = salmón
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  Routine fideos
    MicrophoneComponent mic_3
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent s
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = fideos
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  Routine martillo
    MicrophoneComponent mic_4
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = martillo
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  Routine vinagre
    MicrophoneComponent mic_5
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = vinagre
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  Routine xxxx
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = xxxx
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  Routine xxxxx
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = xxxxx
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  Routine naranja
    MicrophoneComponent mic_6
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = naranja
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  Routine ficha
    MicrophoneComponent mic_7
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = ficha
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  Routine bacalao
    MicrophoneComponent mic_8
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = bacalao
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  Routine nectarina
    MicrophoneComponent mic_9
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = nectarina
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  Routine violín
    MicrophoneComponent mic_10
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = violín
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  Routine pasas
    MicrophoneComponent mic_11
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = Voice (16kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = pasas
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  Routine xxxxxx
    TextComponent text_15
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = xxxxxx
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  Routine monitor
    MicrophoneComponent mic_12
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_16
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = monitor
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  Routine xxxxxxxx
    TextComponent text_17
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = xxxxxxxx
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  Routine nevera
    MicrophoneComponent mic_14
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_18
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = nevera
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  Routine palillo
    MicrophoneComponent mic_15
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_19
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = palillo
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  Routine muñeco
    MicrophoneComponent mic_16
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = Voice (16kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_20
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = muñeco
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  Routine pincel
    MicrophoneComponent mic_17
      channels = auto
      device = default
      disabled = True
      maxSize = 24000
      outputType = default
      sampleRate = Voice (16kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    TextComponent text_21
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = pincel
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  Routine sartén
    TextComponent text_22
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        sarté
  Routine mazapán
    TextComponent text_23
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = mazapán
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  Routine bombón
    TextComponent text_24
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = bombón
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  Routine boina
    TextComponent text_25
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = boina
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  Routine mantequilla
    TextComponent text_26
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = mantequila
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  Routine sopa
    TextComponent text_27
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = sopa
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  Routine bocadillo
    TextComponent text_28
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = bocadillo
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  Routine sobre
    TextComponent text_29
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = sobre
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  Routine filtro
    TextComponent text_30
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = filtro
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  Routine xxxxxxxxxxx
    TextComponent text_31
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = xxxxxxxxxxx
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  Routine pañuelo
    TextComponent text_32
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = pañuelo
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  Routine paletilla
    TextComponent text_33
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = paletilla
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  Routine bombilla
    TextComponent text_34
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = bombilla
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  Routine fabada
    TextComponent text_35
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = fabada
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  Routine pala
    TextComponent text_36
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = pala
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  Routine farol
    TextComponent text_37
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = farol
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  Routine neceser
    TextComponent text_38
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = neceser
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  Routine xxxxx_2
    TextComponent text_39
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = xxxxx
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  Routine salchicha
    TextComponent text_40
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = salchicha
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  Routine sello
    TextComponent text_41
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = sello
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  Routine pavo
    TextComponent text_42
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = pavo
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  Routine navaja
    TextComponent text_43
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = navaja
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  Routine sable
    TextComponent text_44
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = sable
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  Routine mango
    TextComponent text_46
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = mango
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  Routine xxxx_2
    TextComponent text_47
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = xxxx
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  Routine filete
    TextComponent text_48
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = filete
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  Routine fondúe
    TextComponent text_49
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = fondúe
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  Routine xxxxxxxx_2
    TextComponent text_50
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = xxxxxxxx
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  Routine setas
    TextComponent text_51
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = setas
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  Routine manguera
    TextComponent text_52
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = manguera
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  Routine fajitas
    TextComponent text_53
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = fajitas
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  Routine máscara
    TextComponent text_54
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = máscara
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  Routine bolígrafo
    TextComponent text_55
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = bolígrafo
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  Routine paella
    TextComponent text_56
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = paella
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  Routine melóm
    TextComponent text_57
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = melón
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  Routine nachos
    TextComponent text_58
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = nachos
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  Routine nuez
    TextComponent text_59
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = nuez
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  Routine nata
    TextComponent text_60
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = nata
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  Routine funda
    TextComponent text_61
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = funda
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  Routine balde
    TextComponent text_62
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = balde
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  Routine paraguas
    TextComponent text_63
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = paraguas
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  Routine soga
    TextComponent text_64
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = soga
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  Routine pollo
    TextComponent text_65
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = pollo
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  Routine fusil
    TextComponent text_66
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = fusil
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  Routine sandía
    TextComponent text_67
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = sandía
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  Routine xxxxxxx
    TextComponent text_68
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = xxxxxxx
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  Routine naipes
    TextComponent text_69
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = naipes
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  Routine bizcocho
    TextComponent text_70
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = bizcocho
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  Routine xxxxxx_2
    TextComponent text_71
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = xxxxxx
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  Routine nudo
    TextComponent text_45
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = nudo
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Flow
  Routine start
  Routine manzana
  Routine ISI
  Routine salmón
  Routine ISI
  Routine fideos
  Routine ISI
  Routine martillo
  Routine ISI
  Routine vinagre
  Routine ISI
  Routine xxxx
  Routine ISI
  Routine xxxxx
  Routine ISI
  Routine naranja
  Routine ISI
  Routine ficha
  Routine ISI
  Routine bacalao
  Routine ISI
  Routine nectarina
  Routine ISI
  Routine violín
  Routine ISI
  Routine xxxxxx
  Routine ISI
  Routine monitor
  Routine ISI
  Routine xxxxxxxx
  Routine ISI
  Routine nevera
  Routine ISI
  Routine palillo
  Routine ISI
  Routine muñeco
  Routine ISI
  Routine pincel
  Routine ISI
  Routine sartén
  Routine ISI
  Routine mazapán
  Routine ISI
  Routine bombón
  Routine ISI
  Routine boina
  Routine ISI
  Routine mantequilla
  Routine ISI
  Routine sopa
  Routine ISI
  Routine bocadillo
  Routine ISI
  Routine sobre
  Routine ISI
  Routine filtro
  Routine xxxxxxxxxxx
  Routine pañuelo
  Routine ISI
  Routine paletilla
  Routine ISI
  Routine bombilla
  Routine ISI
  Routine fabada
  Routine ISI
  Routine pala
  Routine ISI
  Routine farol
  Routine ISI
  Routine neceser
  Routine ISI
  Routine xxxxx_2
  Routine ISI
  Routine salchicha
  Routine ISI
  Routine sello
  Routine ISI
  Routine pavo
  Routine ISI
  Routine navaja
  Routine ISI
  Routine sable
  Routine nudo
  Routine ISI
  Routine mango
  Routine ISI
  Routine xxxx_2
  Routine ISI
  Routine filete
  Routine ISI
  Routine fondúe
  Routine ISI
  Routine xxxxxxxx_2
  Routine ISI
  Routine setas
  Routine ISI
  Routine manguera
  Routine ISI
  Routine fajitas
  Routine ISI
  Routine máscara
  Routine ISI
  Routine bolígrafo
  Routine ISI
  Routine paella
  Routine ISI
  Routine melóm
  Routine ISI
  Routine nachos
  Routine ISI
  Routine nuez
  Routine ISI
  Routine nata
  Routine ISI
  Routine funda
  Routine ISI
  Routine balde
  Routine ISI
  Routine paraguas
  Routine ISI
  Routine soga
  Routine ISI
  Routine pollo
  Routine ISI
  Routine fusil
  Routine ISI
  Routine sandía
  Routine ISI
  Routine xxxxxxx
  Routine ISI
  Routine naipes
  Routine ISI
  Routine bizcocho
  Routine ISI
  Routine xxxxxx_2
